PsychoPy2experiment version="2022.2.5"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': 'data.getDateStr(format="%Y-%m-%d-%H%M"))'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = oddball
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent stimulus
      hamming = False
      sound [set every repeat] = $sound_in
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      volume = 2
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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    SerialOutComponent code_out
      baudrate = 9600
      bytesize = 8
      disabled = True
      getResponse = False
      parity = N
      port = COM3
      startVal [condition] = stimulus.status == STARTED
      startdata = chr($id)
      stopVal [duration (s)] = 5
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine instructions_start
    TextComponent start_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome

        Press the "space" key to continue.
    KeyboardComponent start_keypress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_final
    TextComponent final_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you

        Press the "escape" key to exit.
    KeyboardComponent final_keypress
      allowedKeys = 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine post_trial
    TextComponent post_trial_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent trial_keypress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_rest
    TextComponent block_rest_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You may take a small break.

        Press the "space" key to continue.
    KeyboardComponent block_rest_keypress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      hamming = False
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instructions_block
    TextComponent block_instructions
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Listen to the following repeating tones.


        You will have to press the "space" key to start each sound. If you get tired, you may also wait a short moment before starting the next sound.

        Remember to sit still and keep your eyes fixed on the + at the center of the screen.


        Press the "space" key to start.
    KeyboardComponent block_keypress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions_start
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = oddball_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'passive_condition_file': 'passive_conditions_block1.xlsx'},
      {'passive_condition_file': 'passive_conditions_block2.xlsx'}]
    Routine instructions_block
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $oddball_condition_file
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine post_trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine instructions_final
